OpenViBE-Scenario

CSV File Reader
  Filename = C:/Users/Pjotrik/Desktop/openvibe DSP/18.9.2015/filename.csv
  Column separator = ,
  Don't use the file time = true
  Samples per buffer = 32
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Matlab Scripting => #2
  Box clock frequency in Hz = 2
  Matlab executable (path) = C:/MATLAB/bin/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = matlab_Initialize
  Process function = matlab_Process
  Uninitialize function = matlab_Uninitialize
#2.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/Pjotrik/Desktop/openvibe DSP/relax.wav
  Loop = false
#2.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/Pjotrik/Desktop/openvibe DSP/pause.wav
  Loop = False
#2.RoboArm commands -> RoboArm
  Robo arm connected = false
  Movement speed <1-100> = 50
  Top Angle <0-90> = 30
  Bottom Angle <0-90> = 0
Data=#2.Processed signal -> Signal display
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 20
  Vertical Offset = 13
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#2.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/Pjotrik/Desktop/openvibe DSP/move.wav
  Loop = False
Input stream 2=#2.RoboArm commands, Input stream 3=#2.Beep stimulations -> Generic stream writer
  Filename = record-[$core{date}-$core{time}].ov
  Use compression = false
